<?xml version='1.0' encoding='UTF-8'?>
<model name="Cytokine" xmlns="http://www.cellml.org/cellml/1.1#" xmlns:cellml="http://www.cellml.org/cellml/1.1#" xmlns:xlink="http://www.w3.org/1999/xlink">
    <import xlink:href="HATAKEYAMA.cellml">
        <component component_ref="ERK" name="ERK"/>
        <component component_ref="MEK" name="MEK"/>
        <component component_ref="RAF" name="RAF"/>
        <component component_ref="Akt" name="Akt"/>
        <component component_ref="RasGDPtoRasGTP" name="RasGDPtoRasGTP"/>
        <component component_ref="geometry" name="geometry"/>
        <component component_ref="PI3K" name="PI3K"/>
    </import>
    <!--
*******************************************************
***         U   N   I   T   S                       ***
*******************************************************
-->
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="nm">
        <unit prefix="nano" units="mole"/>
        <unit exponent="-1" units="liter"/>
    </units>
    <units name="first_order_rate_constant">
        <unit exponent="-1" units="s"/>
    </units>
    <units name="second_order_rate_constant">
        <unit units="nm"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="flux">
        <unit units="nm"/>
        <unit exponent="-1" units="s"/>
    </units>
    <!--
*********************************************************
***       C   O   M   P   O   N   E   N   T   S       ***
*********************************************************
-->
    <component name="environment">
        <variable name="t" public_interface="out" units="s"/>
    </component>
    <component name="cytokines">
        <variable name="t" public_interface="in" units="s"/>
        <variable name="ERKPP" public_interface="in" units="nm"/>
        <variable name="J29" units="flux"/>
        <variable initial_value="0" name="TNF" public_interface="out" units="nm"/>
        <variable initial_value="0.00013127" name="kf31" units="first_order_rate_constant"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J29</ci>
                <apply>
                    <times/>
                    <ci>kf31</ci>
                    <ci>ERKPP</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>t</ci>
                    </bvar>
                    <ci>TNF</ci>
                </apply>
                <ci>J29</ci>
            </apply>
        </math>
    </component>
    <connection>
        <map_components component_1="environment" component_2="cytokines"/>
        <map_variables variable_1="t" variable_2="t"/>
    </connection>
    <connection>
        <map_components component_1="geometry" component_2="environment"/>
        <map_variables variable_1="t" variable_2="t"/>
    </connection>
    <connection>
        <map_components component_1="environment" component_2="ERK"/>
        <map_variables variable_1="t" variable_2="t"/>
    </connection>
    <connection>
        <map_components component_1="environment" component_2="MEK"/>
        <map_variables variable_1="t" variable_2="t"/>
    </connection>
    <connection>
        <map_components component_1="environment" component_2="RAF"/>
        <map_variables variable_1="t" variable_2="t"/>
    </connection>
    <connection>
        <map_components component_1="environment" component_2="Akt"/>
        <map_variables variable_1="t" variable_2="t"/>
    </connection>
    <connection>
        <map_components component_1="environment" component_2="RasGDPtoRasGTP"/>
        <map_variables variable_1="t" variable_2="t"/>
    </connection>
    <connection>
        <map_components component_1="environment" component_2="PI3K"/>
        <map_variables variable_1="t" variable_2="t"/>
    </connection>
    <connection>
        <map_components component_1="cytokines" component_2="ERK"/>
        <map_variables variable_1="ERKPP" variable_2="ERKPP"/>
    </connection>
</model>
