def model hatakeyama_model_2003 as
  def unit s as
    unit second;
  enddef;
  def unit nm as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit flux as
    unit nm;
    unit s {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit nm {expo: -1};
    unit s {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit s {expo: -1};
  enddef;

  def comp environment as
    var time: s {pub: out};
  enddef;

  def comp PI3K as
    var time: s {pub: in};
    var kf1: second_order_rate_constant {init: 0.0012};
    var kb1: first_order_rate_constant {init: 0.00076};
    var kf2: second_order_rate_constant {init: 0.01};
    var kb2: first_order_rate_constant {init: 0.1};
    var kf3: first_order_rate_constant {init: 1};
    var kb3: first_order_rate_constant {init: 0.01};
    var kf34: first_order_rate_constant {init: 0.001};
    var kb34: first_order_rate_constant {init: 0};
    var V4: flux {init: 62.5};
    var k4: nm {init: 50};
    var kf5: second_order_rate_constant {init: 0.1};
    var kb5: first_order_rate_constant {init: 1};
    var kf6: first_order_rate_constant {init: 20};
    var kb6: first_order_rate_constant {init: 5};
    var kf7: first_order_rate_constant {init: 60};
    var kb7: first_order_rate_constant {init: 546};
    var kf8: first_order_rate_constant {init: 2040};
    var kb8: second_order_rate_constant {init: 15700};
    var kf9: first_order_rate_constant {init: 40.8};
    var kb9: second_order_rate_constant {init: 0};
    var V10: flux {init: 0.0154};
    var k10: nm {init: 340};
    var kf23: second_order_rate_constant {init: 0.1};
    var kb23: first_order_rate_constant {init: 2};
    var kf24: first_order_rate_constant {init: 9.85};
    var kb24: first_order_rate_constant {init: 0.0985};
    var kf25: first_order_rate_constant {init: 45.8};
    var kb25: second_order_rate_constant {init: 0.047};
    var V26: flux {init: 2620};
    var k26: nm {init: 3680};
    var R: nm {init: 80};
    var Shc: nm {init: 1000};
    var PI3K: nm {init: 10};
    var HRG: nm {init: 333};
    var R_HRG: nm {init: 0};
    var R_HRG2: nm {init: 0};
    var Internalisation: nm {init: 0};
    var RP: nm {init: 0};
    var R_Shc: nm {init: 0};
    var R_ShP: nm {init: 0};
    var ShP: nm {init: 0};
    var R_ShGS: nm {init: 0};
    var ShGS: nm {init: 0, pub: out};
    var GS: nm {init: 10};
    var R_PI3K: nm {init: 0};
    var R_PI3Kstar: nm {init: 0};
    var PI3Kstar: nm {init: 0, pub: out};
    var two: dimensionless {init: 2};
    var RP_normalised: nm {pub: out};
    var Shc_normalised: nm {pub: out};
    var PI3Kstar_normalised: nm {pub: out};
    ode(R, time) = -kf1*R*HRG+kb1*R_HRG;
    ode(HRG, time) = -kf1*R*HRG+kb1*R_HRG;
    ode(R_HRG, time) = kf1*R*HRG-kb1*R_HRG-two*(kf2*R_HRG*R_HRG-kb2*R_HRG2);
    ode(R_HRG2, time) = kf2*R_HRG*R_HRG-kb2*R_HRG2-(kf3*R_HRG2-kb3*RP)+V4*RP/(k4+RP);
    ode(RP, time) = kf3*R_HRG2-kb3*RP-V4*RP/(k4+RP)-(kf5*RP*Shc-kb5*R_Shc)+kf8*R_ShP-kb8*ShGS*RP-(kf23*RP*PI3K-kb23*R_PI3K)+kf25*R_PI3Kstar-kb25*RP*PI3Kstar-(kf34*RP-kb34*Internalisation);
    ode(Internalisation, time) = kf34*RP-kb34*Internalisation;
    ode(R_Shc, time) = kf5*RP*Shc-kb5*R_Shc-(kf6*R_Shc-kb6*R_ShP);
    ode(Shc, time) = -(kf5*RP*Shc-kb5*R_Shc)+V10*ShP/(k10+ShP);
    ode(R_ShP, time) = kf6*R_Shc-kb6*R_ShP-(kf7*R_ShP-kb7*R_ShGS);
    ode(GS, time) = -(kf7*R_ShP-kb7*R_ShGS)+kf9*ShGS-kb9*GS*ShP;
    ode(ShP, time) = kf9*ShGS-kb9*GS*ShP-V10*ShP/(k10+ShP);
    ode(R_ShGS, time) = kf7*R_ShP-kb7*R_ShGS-(kf8*R_ShP-kb8*ShGS*RP);
    ode(ShGS, time) = kf8*R_ShP-kb8*ShGS*RP-(kf9*ShGS-kb9*GS*ShP);
    ode(R_PI3K, time) = kf23*RP*PI3K-kb23*R_PI3K-(kf24*R_PI3K-kb24*R_PI3Kstar);
    ode(PI3K, time) = -(kf23*RP*PI3K-kb23*R_PI3K)+V26*PI3Kstar/(k26+PI3Kstar);
    ode(R_PI3Kstar, time) = kf24*R_PI3K-kb24*R_PI3Kstar-(kf25*R_PI3Kstar-kb25*RP*PI3Kstar);
    ode(PI3Kstar, time) = kf25*R_PI3Kstar-kb25*RP*PI3Kstar-V26*PI3Kstar/(k26+PI3Kstar);
    RP_normalised = 2.6613{dimensionless}*(R_PI3K+R_PI3Kstar+R_Shc+R_ShGS+R_ShP+RP);
    PI3Kstar_normalised = 10{dimensionless}*(PI3Kstar+R_PI3Kstar);
    Shc_normalised = 0.1{dimensionless}*(R_Shc+R_ShP+ShP+R_ShGS+R_ShGS+ShGS);
  enddef;

  def comp RasGDPtoRasGTP as
    var time: s {pub: in};
    var ShGS: nm {pub: in};
    var RasGTP: nm {init: 0, pub: out};
    var kf11: first_order_rate_constant {init: 0.222};
    var k11: nm {init: 0.181};
    var V12: flux {init: 0.289};
    var k12: nm {init: 0.0571};
    var RasGDP: nm {init: 120};
    ode(RasGDP, time) = -kf11*ShGS*RasGDP/(k11+RasGDP)+V12*RasGTP/(k12+RasGTP);
    ode(RasGTP, time) = kf11*ShGS*RasGDP/(k11+RasGDP)-V12*RasGTP/(k12+RasGTP);
  enddef;

  def comp RAF as
    var time: s {pub: in};
    var RasGTP: nm {pub: in};
    var Akt_PIPP: nm {pub: in};
    var RAF_star: nm {init: 0, pub: out};
    var kf13: first_order_rate_constant {init: 1.53};
    var k13: nm {init: 11.7};
    var kf14: first_order_rate_constant {init: 0.00673};
    var k14: nm {init: 8.07};
    var E: nm {init: 7};
    var RAF: nm {init: 20};
    var RAF_star_normalised: nm {pub: out};
    ode(RAF, time) = kf14*(Akt_PIPP+E)*RAF_star/(k14+RAF_star)-kf13*RasGTP*RAF/(k13+RAF);
    ode(RAF_star, time) = -kf14*(Akt_PIPP+E)*RAF_star/(k14+RAF_star)+kf13*RasGTP*RAF/(k13+RAF);
    RAF_star_normalised = 0.3684{dimensionless}*RAF_star;
  enddef;

  def comp Akt as
    var time: s {pub: in};
    var PI3Kstar: nm {pub: in};
    var Akt_PIPP: nm {init: 0.0, pub: out};
    var MEKP: nm {pub: in};
    var MEKPP: nm {pub: in};
    var kf27: first_order_rate_constant {init: 16.9};
    var k27: nm {init: 39.1};
    var V28: flux {init: 17000};
    var k28: nm {init: 9.02};
    var kf29: second_order_rate_constant {init: 507};
    var kb29: first_order_rate_constant {init: 234};
    var V30: flux {init: 20000};
    var k30: nm {init: 80000};
    var kf31: first_order_rate_constant {init: 0.107};
    var k31: nm {init: 4.35};
    var V32: flux {init: 20000};
    var k32: nm {init: 80000};
    var kf33: first_order_rate_constant {init: 0.211};
    var k33: nm {init: 12};
    var k16: nm {init: 2200};
    var k18: nm {init: 60};
    var P: nm {init: 800};
    var PIP3: nm {init: 0};
    var Akt: nm {init: 15};
    var Akt_PIP3: nm {init: 0};
    var Akt_PIP: nm {init: 0, pub: out};
    var PP2A: nm {init: 11.4, pub: out};
    var one: dimensionless {init: 1};
    var Akt_PIPP_normalised: nm {pub: out};
    ode(P, time) = V28*PIP3/(k28+PIP3)-kf27*PI3Kstar*P/(k27+P);
    ode(PIP3, time) = -V28*PIP3/(k28+PIP3)+kf27*PI3Kstar*P/(k27+P)-(kf29*PIP3*Akt-kb29*Akt_PIP3);
    ode(Akt, time) = -(kf29*PIP3*Akt-kb29*Akt_PIP3);
    ode(Akt_PIP3, time) = kf29*PIP3*Akt-kb29*Akt_PIP3-V30*Akt_PIP3/(k30*(one+Akt_PIP/k32)+Akt_PIP3)+kf31*PP2A*Akt_PIP/(k31*(one+MEKP/k16+MEKPP/k18+Akt_PIPP/k33)+Akt_PIP);
    ode(Akt_PIP, time) = V30*Akt_PIP3/(k30*(one+Akt_PIP/k32)+Akt_PIP3)-kf31*PP2A*Akt_PIP/(k31*(one+MEKP/k16+MEKPP/k18+Akt_PIPP/k33)+Akt_PIP)-V32*Akt_PIP/(k32*(one+Akt_PIP3/k30)+Akt_PIP)+kf33*PP2A*Akt_PIPP/(k33*(one+MEKP/k16+MEKPP/k18+Akt_PIP/k31)+Akt_PIPP);
    ode(Akt_PIPP, time) = V32*Akt_PIP/(k32*(one+Akt_PIP3/k30)+Akt_PIP)-kf33*PP2A*Akt_PIPP/(k33*(one+MEKP/k16+MEKPP/k18+Akt_PIP/k31)+Akt_PIPP);
    Akt_PIPP_normalised = 5.529{dimensionless}*Akt_PIPP;
  enddef;

  def comp MEK as
    var time: s {pub: in};
    var RAF_star: nm {pub: in};
    var MEKPP: nm {init: 0, pub: out};
    var PP2A: nm {init: 11.4};
    var MEKP: nm {init: 0, pub: out};
    var MEK: nm {init: 118};
    var Akt_PIP: nm {pub: in};
    var Akt_PIPP: nm {pub: in};
    var kf15: first_order_rate_constant {init: 3.5};
    var k15: nm {init: 317};
    var kf16: first_order_rate_constant {init: 0.058};
    var k16: nm {init: 2200};
    var kf17: first_order_rate_constant {init: 2.9};
    var k17: nm {init: 317};
    var kf18: first_order_rate_constant {init: 0.058};
    var k18: nm {init: 60};
    var k31: nm {init: 4.35};
    var k33: nm {init: 12};
    var one: dimensionless {init: 1};
    var MEKPP_normalised: nm {pub: out};
    ode(MEK, time) = -kf15*RAF_star*MEK/(k15*(one+MEKP/k17)+MEK)+kf16*PP2A*MEKP/(k16*(one+MEKPP/k18+Akt_PIP/k31+Akt_PIPP/k33)+MEKP);
    ode(MEKP, time) = kf15*RAF_star*MEK/(k15*(one+MEKP/k17)+MEK)-kf16*PP2A*MEKP/(k16*(one+MEKPP/k18+Akt_PIP/k31+Akt_PIPP/k33)+MEKP)-kf17*RAF_star*MEKP/(k17*(one+MEK/k15)+MEKP)+kf18*PP2A*MEKPP/(k18*(one+MEKP/k16+Akt_PIP/k31+Akt_PIPP/k33)+MEKPP);
    ode(MEKPP, time) = kf17*RAF_star*MEKP/(k17*(one+MEK/k15)+MEKP)-kf18*PP2A*MEKPP/(k18*(one+MEKP/k16+Akt_PIP/k31+Akt_PIPP/k33)+MEKPP);
    MEKPP_normalised = 0.6818{dimensionless}*MEKPP;
  enddef;

  def comp ERK as
    var time: s {pub: in};
    var MEKPP: nm {pub: in};
    var J_ERKPP: flux {pub: out};
    var MKP3: nm {init: 2.4};
    var ERK: nm {init: 1000000};
    var ERKP: nm {init: 0};
    var ERKPP: nm {init: 0, pub: out};
    var kf19: first_order_rate_constant {init: 9.5};
    var k19: nm {init: 146000};
    var kf20: first_order_rate_constant {init: 0.3};
    var k20: nm {init: 160};
    var kf21: first_order_rate_constant {init: 16};
    var k21: nm {init: 146000};
    var kf22: first_order_rate_constant {init: 0.27};
    var k22: nm {init: 60};
    var one: dimensionless {init: 1};
    var ERKPP_normalised: nm {pub: out};
    ode(ERK, time) = -kf19*MEKPP*ERK/(k19*(one+ERKP/k21)+ERK)+kf20*MKP3*ERKP/(k20*(one+ERKPP/k22)+ERKP);
    J_ERKPP = kf21*MEKPP*ERKP/(k21*(one+ERK/k19)+ERKP)-kf22*MKP3*ERKPP/(k22*(one+ERKP/k20)+ERKPP);
    ode(ERKP, time) = kf19*MEKPP*ERK/(k19*(one+ERKP/k21)+ERK)-kf20*MKP3*ERKP/(k20*(one+ERKPP/k22)+ERKP)-kf21*MEKPP*ERKP/(k21*(one+ERK/k19)+ERKP)+kf22*MKP3*ERKPP/(k22*(one+ERKP/k20)+ERKPP);
    ERKPP_normalised = 0.28{dimensionless}*J_ERKPP;
  enddef;
  def map between PI3K and environment for
    vars time and time;
  enddef;
  def map between Akt and environment for
    vars time and time;
  enddef;
  def map between RAF and environment for
    vars time and time;
  enddef;
  def map between RasGDPtoRasGTP and environment for
    vars time and time;
  enddef;
  def map between MEK and environment for
    vars time and time;
  enddef;
  def map between ERK and environment for
    vars time and time;
  enddef;
  def map between PI3K and RasGDPtoRasGTP for
    vars ShGS and ShGS;
  enddef;
  def map between RasGDPtoRasGTP and RAF for
    vars RasGTP and RasGTP;
  enddef;
  def map between RAF and Akt for
    vars Akt_PIPP and Akt_PIPP;
  enddef;
  def map between Akt and MEK for
    vars MEKP and MEKP;
    vars MEKPP and MEKPP;
    vars Akt_PIP and Akt_PIP;
    vars Akt_PIPP and Akt_PIPP;
    // vars PP2A and PP2A;
  enddef;
  def map between ERK and MEK for
    vars MEKPP and MEKPP;
  enddef;
  def map between RAF and MEK for
    vars RAF_star and RAF_star;
  enddef;
  def map between PI3K and Akt for
    vars PI3Kstar and PI3Kstar;
  enddef;
enddef;
