<?xml version='1.0'?>
<model name="HC_KIR" xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#">
    <!--
*******************************************************
***         U   N   I   T   S                       ***
*******************************************************
-->
    <units name="s">
        <unit units="second"/>
    </units>
    <units name="nm">
        <unit prefix="nano" units="mole"/>
        <unit exponent="-1" units="liter"/>
    </units>
    <units name="first_order_rate_constant">
        <unit exponent="-1" units="s"/>
    </units>
    <units name="flux">
        <unit units="nm"/>
        <unit exponent="-1" units="s"/>
    </units>
    <units name="second_order_rate_constant">
        <unit exponent="-1" units="nm"/>
        <unit exponent="-1" units="s"/>
    </units>
    <!--
*********************************************************
***       C   O   M   P   O   N   E   N   T   S       ***
*********************************************************
-->
    <component name="environment">
        <variable name="time" public_interface="out" units="s"/>
    </component>
    <component name="HC_KIR">
        <variable name="time" public_interface="in" units="second"/>
        <variable name="J1" public_interface="out" units="flux"/>
        <variable initial_value="6.641e-12" name="kf1" public_interface="out" units="second_order_rate_constant"/>
        <variable initial_value="0.001866" name="kb1" public_interface="out" units="first_order_rate_constant"/>
        <variable initial_value="100" name="hC" units="nm"/>
        <variable initial_value="200" name="dS2" units="nm"/>
        <variable initial_value="0" name="hCdS2" public_interface="out" units="nm"/>
        <math xmlns="http://www.w3.org/1998/Math/MathML">
            <apply>
                <eq/>
                <ci>J1</ci>
                <apply>
                    <minus/>
                    <apply>
                        <times/>
                        <ci>kf1</ci>
                        <ci>hC</ci>
                        <ci>dS2</ci>
                    </apply>
                    <apply>
                        <times/>
                        <ci>kb1</ci>
                        <ci>hCdS2</ci>
                    </apply>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>hC</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>dS2</ci>
                </apply>
                <apply>
                    <minus/>
                    <ci>J1</ci>
                </apply>
            </apply>
            <apply>
                <eq/>
                <apply>
                    <diff/>
                    <bvar>
                        <ci>time</ci>
                    </bvar>
                    <ci>hCdS2</ci>
                </apply>
                <ci>J1</ci>
            </apply>
        </math>
    </component>
    <connection>
        <map_components component_1="HC_KIR" component_2="environment"/>
        <map_variables variable_1="time" variable_2="time"/>
    </connection>
</model>
