def model hatakeyama_model_2003 as
  // *******************************************************
  // ***         U   N   I   T   S                       ***
  // *******************************************************
  def unit s as
    unit second;
  enddef;
  def unit nm as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit flux as
    unit nm;
    unit s {expo: -1};
  enddef;
  def unit second_order_rate_constant as
    unit nm {expo: -1};
    unit s {expo: -1};
  enddef;
  def unit first_order_rate_constant as
    unit s {expo: -1};
  enddef;
  // *********************************************************
  // ***       C   O   M   P   O   N   E   N   T   S       ***
  // *********************************************************

  def comp environment as
    var t: s {pub: out};
  enddef;

  def comp geometry as
    var t: s {priv: out, pub: in};
    var kf5: second_order_rate_constant {init: 0.1, priv: out};
    var kb5: first_order_rate_constant {init: 0.1, priv: out};
    var kf23: second_order_rate_constant {init: 0.1, priv: out};
    var kb23: first_order_rate_constant {init: 2, priv: out};
    var kf14: first_order_rate_constant {init: 0.00673, priv: out};
    var k14: nm {init: 8.07, priv: out};
    var kf29: second_order_rate_constant {init: 507, priv: out};
    var kb29: first_order_rate_constant {init: 234, priv: out};
    var R_ShGS: nm {init: 0, priv: out};
    var MEK: nm {priv: in, pub: out};
    var PI3Kstar: nm {priv: in, pub: out};
  enddef;
  def map between geometry and environment for
    vars t and t;
  enddef;

  def group as encapsulation for
    comp geometry incl
      comp PI3K;
      comp RAF;
      comp Akt;
      comp MEK;
    endcomp;
  enddef;
  def map between geometry and PI3K for
    vars kf5 and kf5;
    vars kb5 and kb5;
    vars kf23 and kf23;
    vars kb23 and kb23;
    vars R_ShGS and R_ShGS;
    vars t and t;
    vars PI3Kstar and PI3Kstar;
  enddef;
  def map between RasGDPtoRasGTP and geometry for
    vars t and t;
  enddef;
  def map between geometry and ERK for
    vars t and t;
    // vars ERKPP_normalised and ERKPP_normalised;
    // vars J_ERKPP and J_ERKPP;
  enddef;
  def map between geometry and RAF for
    vars kf14 and kf14;
    vars k14 and k14;
    vars t and t;
  enddef;
  def map between geometry and MEK for
    vars MEK and MEK;
    vars t and t;
  enddef;
  def map between geometry and Akt for
    vars kf29 and kf29;
    vars kb29 and kb29;
    vars t and t;
  enddef;

  def comp PI3K as
    var t: s {pub: in};
    var kf1: second_order_rate_constant {init: 0.0012};
    var kb1: first_order_rate_constant {init: 0.00076};
    var kf2: second_order_rate_constant {init: 0.01};
    var kb2: first_order_rate_constant {init: 0.1};
    var kf3: first_order_rate_constant {init: 1};
    var kb3: first_order_rate_constant {init: 0.01};
    var kf34: first_order_rate_constant {init: 0.001};
    var kb34: first_order_rate_constant {init: 0};
    var V4: flux {init: 62.5};
    var k4: nm {init: 50};
    var kf5: second_order_rate_constant {pub: in};
    var kb5: first_order_rate_constant {pub: in};
    var kf6: first_order_rate_constant {init: 20};
    var kb6: first_order_rate_constant {init: 5};
    var kf7: second_order_rate_constant {init: 60};
    var kb7: first_order_rate_constant {init: 546};
    var kf8: first_order_rate_constant {init: 2040};
    var kb8: second_order_rate_constant {init: 15700};
    var kf9: first_order_rate_constant {init: 40.8};
    var kb9: second_order_rate_constant {init: 0};
    var V10: flux {init: 0.0154};
    var k10: nm {init: 340};
    var kf23: second_order_rate_constant {pub: in};
    var kb23: first_order_rate_constant {pub: in};
    var kf24: first_order_rate_constant {init: 9.85};
    var kb24: first_order_rate_constant {init: 0.0985};
    var kf25: first_order_rate_constant {init: 45.8};
    var kb25: second_order_rate_constant {init: 0.047};
    var V26: flux {init: 2620};
    var k26: nm {init: 3680};
    // var pzap70: nm {pub: in};
    var R: nm {init: 79.6};
    var Shc: nm {init: 1060};
    var PI3K: nm {init: 8.16};
    var HRG: nm {init: 330};
    var R_HRG: nm {init: 0};
    var R_HRG2: nm {init: 0};
    var Internalisation: nm {init: 0};
    var RP: nm {init: 0};
    var R_Shc: nm {init: 0};
    var R_ShP: nm {init: 0, pub: out};
    var ShP: nm {init: 0, pub: out};
    var R_ShGS: nm {pub: in};
    var ShGS: nm {init: 0, pub: out};
    var GS: nm {init: 10.5};
    var R_PI3K: nm {init: 0};
    var R_PI3Kstar: nm {init: 0};
    var PI3Kstar: nm {init: 0, pub: out};
    var two: dimensionless {init: 2};
    var RP_normalised: nm {pub: out};
    ode(R, t) = -kf1*R*HRG+kb1*R_HRG;
    ode(HRG, t) = -kf1*R*HRG+kb1*R_HRG;
    ode(R_HRG, t) = kf1*R*HRG-kb1*R_HRG-two*(kf2*R_HRG*R_HRG-kb2*R_HRG2);
    ode(R_HRG2, t) = kf2*R_HRG*R_HRG-kb2*R_HRG2-(kf3*R_HRG2-kb3*RP)+V4*RP/(k4+RP);
    ode(RP, t) = kf3*R_HRG2-kb3*RP-V4*RP/(k4+RP)-(kf5*RP*Shc-kb5*R_Shc)+kf8*R_ShGS-kb8*ShGS*RP-(kf23*RP*PI3K-kb23*R_PI3K)+kf25*R_PI3Kstar-kb25*RP*PI3Kstar-(kf34*RP-kb34*Internalisation);
    ode(Internalisation, t) = kf34*RP-kb34*Internalisation;
    ode(R_Shc, t) = kf5*RP*Shc-kb5*R_Shc-(kf6*R_Shc-kb6*R_ShP);
    ode(Shc, t) = -(kf5*RP*Shc-kb5*R_Shc)+V10*ShP/(k10+ShP);
    ode(R_ShP, t) = kf6*R_Shc-kb6*R_ShP-(kf7*R_ShP*GS-kb7*R_ShGS);
    ode(GS, t) = -(kf7*R_ShP*GS-kb7*R_ShGS)+kf9*ShGS-kb9*GS*ShP;
    ode(ShP, t) = kf9*ShGS-kb9*GS*ShP-V10*ShP/(k10+ShP);
    ode(R_ShGS, t) = kf7*R_ShP*GS-kb7*R_ShGS-(kf8*R_ShGS-kb8*ShGS*RP);
    ode(ShGS, t) = kf8*R_ShGS-kb8*ShGS*RP-(kf9*ShGS-kb9*GS*ShP);
    ode(R_PI3K, t) = kf23*RP*PI3K-kb23*R_PI3K-(kf24*R_PI3K-kb24*R_PI3Kstar);
    ode(PI3K, t) = -(kf23*RP*PI3K-kb23*R_PI3K)+V26*PI3Kstar/(k26+PI3Kstar);
    ode(R_PI3Kstar, t) = kf24*R_PI3K-kb24*R_PI3Kstar-(kf25*R_PI3Kstar-kb25*RP*PI3Kstar);
    ode(PI3Kstar, t) = kf25*R_PI3Kstar-kb25*RP*PI3Kstar-V26*PI3Kstar/(k26+PI3Kstar);
    RP_normalised = 2.5125{dimensionless}*(R_PI3K+R_PI3Kstar+R_Shc+R_ShGS+R_ShP+RP);
  enddef;

  def comp RasGDPtoRasGTP as
    var t: s {pub: in};
    var ShGS: nm {pub: in};
    var RasGTP: nm {init: 0, pub: out};
    var kf11: first_order_rate_constant {init: 0.222};
    var k11: nm {init: 0.181};
    var V12: flux {init: 0.289};
    var k12: nm {init: 0.0571};
    var RasGDP: nm {init: 120};
    ode(RasGDP, t) = -kf11*ShGS*RasGDP/(k11+RasGDP)+V12*RasGTP/(k12+RasGTP);
    ode(RasGTP, t) = kf11*ShGS*RasGDP/(k11+RasGDP)-V12*RasGTP/(k12+RasGTP);
  enddef;

  def comp RAF as
    var t: s {pub: in};
    var RasGTP: nm {pub: in};
    var Akt_PIPP: nm {pub: in};
    var RAF_star: nm {init: 0, pub: out};
    var kf13: first_order_rate_constant {init: 1.53};
    var k13: nm {init: 11.7};
    var kf14: first_order_rate_constant {pub: in};
    var k14: nm {pub: in};
    var E: nm {init: 7};
    var RAF: nm {init: 96.1, pub: out};
    ode(RAF, t) = kf14*(Akt_PIPP+E)*RAF_star/(k14+RAF_star)-kf13*RasGTP*RAF/(k13+RAF);
    ode(RAF_star, t) = -kf14*(Akt_PIPP+E)*RAF_star/(k14+RAF_star)+kf13*RasGTP*RAF/(k13+RAF);
  enddef;

  def comp Akt as
    var t: s {pub: in};
    var PI3Kstar: nm {pub: in};
    var Akt_PIPP: nm {init: 0.0, pub: out};
    var MEKP: nm {pub: in};
    var MEKPP: nm {pub: in};
    var kf27: first_order_rate_constant {init: 16.9};
    var k27: nm {init: 39.1};
    var V28: flux {init: 17000};
    var k28: nm {init: 9.02};
    var kf29: second_order_rate_constant {pub: in};
    var kb29: first_order_rate_constant {pub: in};
    var V30: flux {init: 20000};
    var k30: nm {init: 80000};
    var kf31: first_order_rate_constant {init: 0.107};
    var k31a: nm {init: 4.35};
    var V32: flux {init: 20000};
    var k32: nm {init: 80000};
    var kf33: first_order_rate_constant {init: 0.211};
    var k33a: nm {init: 12};
    var k16a: nm {init: 2200};
    var k18a: nm {init: 60};
    var P: nm {init: 895};
    var PIP3: nm {init: 0};
    var Akt: nm {init: 8.68};
    var Akt_PIP3: nm {init: 0};
    var Akt_PIP: nm {init: 0, pub: out};
    var PP2A: nm {init: 11.4};
    var one: dimensionless {init: 1};
    var Akt_PIPP_normalised: nm {pub: out};
    ode(P, t) = V28*PIP3/(k28+PIP3)-kf27*PI3Kstar*P/(k27+P);
    ode(PIP3, t) = -V28*PIP3/(k28+PIP3)+kf27*PI3Kstar*P/(k27+P)-(kf29*PIP3*Akt-kb29*Akt_PIP3);
    ode(Akt, t) = -(kf29*PIP3*Akt-kb29*Akt_PIP3);
    ode(Akt_PIP3, t) = kf29*PIP3*Akt-kb29*Akt_PIP3-V30*Akt_PIP3/(k30*(one+Akt_PIP/k32)+Akt_PIP3)+kf31*PP2A*Akt_PIP/(k31a*(one+MEKP/k16a+MEKPP/k18a+Akt_PIPP/k33a)+Akt_PIP);
    ode(Akt_PIP, t) = V30*Akt_PIP3/(k30*(one+Akt_PIP/k32)+Akt_PIP3)-kf31*PP2A*Akt_PIP/(k31a*(one+MEKP/k16a+MEKPP/k18a+Akt_PIPP/k33a)+Akt_PIP)-V32*Akt_PIP/(k32*(one+Akt_PIP3/k30)+Akt_PIP)+kf33*PP2A*Akt_PIPP/(k33a*(one+MEKP/k16a+MEKPP/k18a+Akt_PIP/k31a)+Akt_PIPP);
    ode(Akt_PIPP, t) = V32*Akt_PIP/(k32*(one+Akt_PIP3/k30)+Akt_PIP)-kf33*PP2A*Akt_PIPP/(k33a*(one+MEKP/k16a+MEKPP/k18a+Akt_PIP/k31a)+Akt_PIPP);
    Akt_PIPP_normalised = 11.52{dimensionless}*Akt_PIPP;
  enddef;

  def comp MEK as
    var t: s {pub: in};
    var RAF_star: nm {pub: in};
    var MEKPP: nm {init: 0, pub: out};
    var PP2Aa: nm {init: 11.4};
    var MEKP: nm {init: 0, pub: out};
    var MEK: nm {init: 119, pub: out};
    var Akt_PIP: nm {pub: in};
    var Akt_PIPP: nm {pub: in};
    var kf15: first_order_rate_constant {init: 3.5};
    var k15: nm {init: 317};
    var kf16: first_order_rate_constant {init: 0.058};
    var k16: nm {init: 2200};
    var kf17: first_order_rate_constant {init: 2.9};
    var k17: nm {init: 317};
    var kf18: first_order_rate_constant {init: 0.058};
    var k18: nm {init: 60};
    var k31: nm {init: 4.35};
    var k33: nm {init: 12};
    var one_a: dimensionless {init: 1};
    var MEKPP_normalised: nm {pub: out};
    ode(MEK, t) = -kf15*RAF_star*MEK/(k15*(one_a+MEKP/k17)+MEK)+kf16*PP2Aa*MEKP/(k16*(one_a+MEKPP/k18+Akt_PIP/k31+Akt_PIPP/k33)+MEKP);
    ode(MEKP, t) = kf15*RAF_star*MEK/(k15*(one_a+MEKP/k17)+MEK)-kf16*PP2Aa*MEKP/(k16*(one_a+MEKPP/k18+Akt_PIP/k31+Akt_PIPP/k33)+MEKP)-kf17*RAF_star*MEKP/(k17*(one_a+MEK/k15)+MEKP)+kf18*PP2Aa*MEKPP/(k18*(one_a+MEKP/k16+Akt_PIP/k31+Akt_PIPP/k33)+MEKPP);
    ode(MEKPP, t) = kf17*RAF_star*MEKP/(k17*(one_a+MEK/k15)+MEKP)-kf18*PP2Aa*MEKPP/(k18*(one_a+MEKP/k16+Akt_PIP/k31+Akt_PIPP/k33)+MEKPP);
    MEKPP_normalised = 0.84{dimensionless}*MEKPP;
  enddef;

  def comp ERK as
    var t: s {pub: in};
    var MEKPP: nm {pub: in};
    var MKP3: nm {init: 2.4};
    var ERK: nm {init: 1010};
    var ERKP: nm {init: 0};
    var ERKPP: nm {init: 0};
    var J_ERKPP: flux {pub: out};
    var kf19: first_order_rate_constant {init: 9.5};
    var k19: nm {init: 146000};
    var kf20: first_order_rate_constant {init: 0.3};
    var k20: nm {init: 160};
    var kf21: first_order_rate_constant {init: 16};
    var k21: nm {init: 146000};
    var kf22: first_order_rate_constant {init: 0.27};
    var k22: nm {init: 60};
    var one_b: dimensionless {init: 1};
    var ERKPP_normalised: nm {pub: out};
    J_ERKPP = kf21*MEKPP*ERKP/(k21*(one_b+ERK/k19)+ERKP)-kf22*MKP3*ERKPP/(k22*(one_b+ERKP/k20)+ERKPP);
    ode(ERK, t) = -kf19*MEKPP*ERK/(k19*(one_b+ERKP/k21)+ERK)+kf20*MKP3*ERKP/(k20*(one_b+ERKPP/k22)+ERKP);
    ode(ERKP, t) = kf19*MEKPP*ERK/(k19*(one_b+ERKP/k21)+ERK)-kf20*MKP3*ERKP/(k20*(one_b+ERKPP/k22)+ERKP)-kf21*MEKPP*ERKP/(k21*(one_b+ERK/k19)+ERKP)+kf22*MKP3*ERKPP/(k22*(one_b+ERKP/k20)+ERKPP);
    ode(ERKPP, t) = J_ERKPP;
    ERKPP_normalised = 0.099{dimensionless}*J_ERKPP;
  enddef;
  // def map between PI3K and environment for
  //     vars t and t;
  // enddef;
  // def map between Akt and environment for
  //     vars t and t;
  // enddef;
  // def map between RAF and environment for
  //     vars t and t;
  // enddef;
  def map between RasGDPtoRasGTP and environment for
    vars t and t;
  enddef;
  def map between MEK and environment for
    vars t and t;
  enddef;
  def map between ERK and environment for
    vars t and t;
  enddef;
  def map between PI3K and RasGDPtoRasGTP for
    vars ShGS and ShGS;
  enddef;
  def map between RasGDPtoRasGTP and RAF for
    vars RasGTP and RasGTP;
  enddef;
  def map between RAF and Akt for
    vars Akt_PIPP and Akt_PIPP;
  enddef;
  def map between Akt and MEK for
    vars MEKP and MEKP;
    vars MEKPP and MEKPP;
    vars Akt_PIP and Akt_PIP;
    vars Akt_PIPP and Akt_PIPP;
  enddef;
  def map between ERK and MEK for
    vars MEKPP and MEKPP;
  enddef;
  def map between RAF and MEK for
    vars RAF_star and RAF_star;
  enddef;
  def map between PI3K and Akt for
    vars PI3Kstar and PI3Kstar;
  enddef;
enddef;
